PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1080]
  expName = DDT_V1
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Routines
  Routine Instructions
    TextComponent DDTInstrMsg
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the “Money Task”!

        For this task, you will be asked to make choices between two money alternatives. You will not actually receive the amounts of money you choose, but we want you to respond as if  you were given these options in real life. These choices will be displayed on the screen. One amount of money will always be available immediately, and the other amount will always be delayed.At times, the delay will change. If you would prefer to have the amount shown on the left, PRESS THE C KEY. If you would prefer to have the amount on the right, PRESS THE M KEY.  There are no correct or incorrect choices. We are interested in which option you would prefer.

        PRESS Y TO START...
    KeyboardComponent DDTInsrKeys
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine delayPrompt
    CodeComponent rewardCode
      Code Type = Py
      Begin Routine:
        # Set inital smaller sooner reward

        smallerSooner = 500
        largerLater = 1000
    TextComponent delayPomptText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $'The delay for the options on the right is now ' + str(block) + '\n \n PRESS Y TO CONTINUE'
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    KeyboardComponent delayPromptKey
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine DDTTrial
    CodeComponent DDTcode
      Code Type = Py
      End Routine:
        if DDTKeys.keys == 'c':
            smallerSooner = smallerSooner * 0.5
        elif DDTKeys.keys == 'm':
            smallerSooner = smallerSooner * 1.5

        # Save data
        thisExp.addData('smallerSoonerValue', smallerSooner)
        thisExp.addData('largerLaterValue', largerLater)
    TextComponent which
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Which would you prefer?
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    TextComponent smallerSoonerText
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $f'£ {smallerSooner:.2f} NOW'
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    TextComponent largerLaterText
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'£ {largerLater:.2f} in ' + str(block)
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    KeyboardComponent DDTKeys
      allowedKeys = 'c','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = DDT_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', '1 Week'), ('blockNumber', 1)]),
      OrderedDict([('block', '2 Weeks'), ('blockNumber', 2)]),
      OrderedDict([('block', '1 Month'), ('blockNumber', 3)]),
      OrderedDict([('block', '6 Months'), ('blockNumber', 4)]),
      OrderedDict([('block', '1 Year'), ('blockNumber', 5)]),
      OrderedDict([('block', '5 Years'), ('blockNumber', 6)]),
      OrderedDict([('block', '25 Years'), ('blockNumber', 7)])]
    Routine delayPrompt
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 8
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      Routine DDTTrial
    LoopTerminator trials
  LoopTerminator blocks
