PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = IGT_V1
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Routines
  Routine Instructions
    TextComponent IGTInstrMsg
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        In this task, you play a "gambling" game.
        You need to choose one of the four buttons (A,B,C,D) with the mouse.

        Each time you can win some money, but you may sometimes  also have to pay a fee to the bank.
        After each trial, you need to collect your money, which will adjust your pot of money.

        You start with a loan of £2000

        There are 100 trials (taking 5 minutes or so).

        Go until it stops and see how much you can make in addition to the load of £2000.

        PRESS Y TO START...
    KeyboardComponent IGTInsrKeys
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine IGT_trial
    CodeComponent IGT_code
      Code Type = Py
      Begin Experiment:
        # Setting initial balance

        IGTTotalMoney = 2000
        ThisTrialMoney = IGTTotalMoney

        IGTThisTrialReward = 0
        IGTThisTrialPenalty = 0

        # Setting rewards and punishments

        AReward = 100
        APenalty = 250

        BReward = 100
        BPenalty = 250

        CReward = 50
        CPenalty = 50

        DReward = 50
        DPenalty = 50
      End Routine:
        # A button
        if IGTmouse.isPressedIn(buttonA) and FEE == 1:
            IGTThisTrialReward = AReward
            IGTThisTrialPenalty = APenalty
            ThisTrialMoney = (IGTTotalMoney + IGTThisTrialReward) - IGTThisTrialPenalty
            IGTTotalMoney = ThisTrialMoney

        elif IGTmouse.isPressedIn(buttonA) and FEE == 0:
            IGTThisTrialReward = AReward
            IGTThisTrialPenalty = 0
            ThisTrialMoney = IGTTotalMoney + IGTThisTrialReward
            IGTTotalMoney = ThisTrialMoney

        # B button
        if IGTmouse.isPressedIn(buttonB) and FEE == 1:
            IGTThisTrialReward = BReward
            IGTThisTrialPenalty = BPenalty
            ThisTrialMoney = (IGTTotalMoney + IGTThisTrialReward) - IGTThisTrialPenalty
            IGTTotalMoney = ThisTrialMoney

        elif IGTmouse.isPressedIn(buttonB) and FEE == 0:
            IGTThisTrialReward = BReward
            IGTThisTrialPenalty = 0
            ThisTrialMoney = IGTTotalMoney + IGTThisTrialReward
            IGTTotalMoney = ThisTrialMoney

        # C button
        if IGTmouse.isPressedIn(buttonC) and FEE == 1:
            IGTThisTrialReward = CReward
            IGTThisTrialPenalty = CPenalty
            ThisTrialMoney = (IGTTotalMoney + IGTThisTrialReward) - IGTThisTrialPenalty
            IGTTotalMoney = ThisTrialMoney

        elif IGTmouse.isPressedIn(buttonC) and FEE == 0:
            IGTThisTrialReward = CReward
            IGTThisTrialPenalty = 0
            ThisTrialMoney = IGTTotalMoney + IGTThisTrialReward
            IGTTotalMoney = ThisTrialMoney


        # D button
        if IGTmouse.isPressedIn(buttonD) and FEE == 1:
            IGTThisTrialReward = DReward
            IGTThisTrialPenalty = DPenalty
            ThisTrialMoney = (IGTTotalMoney + IGTThisTrialReward) - IGTThisTrialPenalty
            IGTTotalMoney = ThisTrialMoney

        elif IGTmouse.isPressedIn(buttonD) and FEE == 0:
            IGTThisTrialReward = DReward
            IGTThisTrialPenalty = 0
            ThisTrialMoney = IGTTotalMoney + IGTThisTrialReward
            IGTTotalMoney = ThisTrialMoney

        # Save data
        thisExp.addData('IGTThisTrialReward', IGTThisTrialReward)
        thisExp.addData('IGTThisTrialPenalty', IGTThisTrialPenalty)
        thisExp.addData('IGTTotalMoney', IGTTotalMoney)
    TextComponent IGTMoneyMsg
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $u"Your Balance:\n£%.2f" %IGTTotalMoney
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    ImageComponent buttonA
      image [set every frame] = buttonA.png
      pos = (-0.3, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent buttonB
      image [set every frame] = buttonB.png
      pos = (-0.1, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent buttonC
      image [set every frame] = buttonC.png
      pos = (0.1, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent buttonD
      image [set every frame] = buttonD.png
      pos = (0.3, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent IGTmouse
      clickable = buttonA, buttonB, buttonC, buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine IGT_feedback
    CodeComponent IGTFeedbackCode
      Code Type = Py
      Begin Routine:
        # Reward
        IGTFeedback1 = u"You won £%.2f" %IGTThisTrialReward

        # Penalty
        IGTFeedback2 = u"You lost £%.2f" %IGTThisTrialPenalty
    TextComponent IGTRewardMsg
      letterHeight = 0.04
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $IGTFeedback1
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    TextComponent IGTPenaltyMsg
      letterHeight = 0.04
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $IGTFeedback2
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Flow
  Routine Instructions
  LoopInitiator IGT_trials loopType="TrialHandler"
    conditionsFile = IGT_Conditions1.xlsx
    loopType = random
    nReps = 1
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    Routine IGT_trial
    Routine IGT_feedback
  LoopTerminator IGT_trials
