PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SST_Task
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Routines
  Routine feedback
    CodeComponent feedbackCode
      Code Type = Py
      Begin Experiment:
        msg = " "
      Begin Routine:
        # Mistake Code

        if ssig and not SST_resp.corr:
            msg = "You should NOT have pressed!"
        elif not ssig and not SST_resp.corr:
            msg = "You should have pressed!"
        else:
            msg = "Correct!"
    TextComponent feedbackMsg
      letterHeight = 0.05
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine welcomScreen
    KeyboardComponent instr_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent intr_text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        In this task, you need to respond to an arrow, which is surrounded
        by a white circle, pointing either left or right as fast as you can.

        If the arrow points to the right,you should press the M key.
        If the arrow points to the left, you should press the C key.

        However, if the arrow is surrounded by a RED CIRCLE, you
        should NOT RESPOND.

        In the first block of trials, you will be able to practice the task.
        In the second block, the real experiment will begin.
        You WILL be notified when the real experiment begins.


        PRESS ENTER TO START THE EXPERIMENT...
  Routine expStartScreen
    TextComponent expStartScreenText
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        The practice trails are over.
        The REAL trials will begin after this screen.


        PRESS ENTER TO CONTINUE...
    KeyboardComponent expStartKey
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent ssigCon
      Code Type = Py
      Begin Experiment:
        # Inital Stop Signal Start Time
        ssigStartThis = 1.35
        ssigStartLast = ssigStartThis

        # Inital Stop Signal Duration
        ssigDur = 0.65
      Begin Routine:
        # Should a stop signal display?
        if ssig:
            ssigOpp = 1
        else:
            ssigOpp = 0
      End Routine:
        # Control Stop Signal Difficulty
        if ssig and corrAns and ssigStartLast >= 1.05:
            ssigStartThis = ssigStartLast - 0.1
            ssigDur = 2 - ssigStartThis
        elif ssig and not corrAns and ssigStartLast <= 1.35:
            ssigStartThis = ssigStartLast + 0.1
            ssigDur = 2 - ssigStartThis
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent arrow
      image [set every repeat] = $arrows
      size = (0.25, 0.25)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    ImageComponent stop
      image [set every repeat] = $ssigImg
      opacity [set every repeat] = $ssigOpp
      size = (0.25, 0.25)
      startVal [time (s)] = $ssigStartThis
      stopVal [duration (s)] = $ssigDur
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    KeyboardComponent SST_resp
      allowedKeys = 'c','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      storeCorrect = True
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    StaticComponent ISI
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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Flow
  Routine welcomScreen
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = SST_prac_V1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('label', 'practice'), ('arrows', 'go_left.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_left.png')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_right.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_right.png')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_left.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_left.png')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_right.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_right.png')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_left.png'), ('corrAns', 'c'), ('ssig', False), ('ssigImg', 'None')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_right.png'), ('corrAns', 'm'), ('ssig', False), ('ssigImg', 'None')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_left.png'), ('corrAns', 'c'), ('ssig', False), ('ssigImg', 'None')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_right.png'), ('corrAns', 'm'), ('ssig', False), ('ssigImg', 'None')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_left.png'), ('corrAns', 'c'), ('ssig', False), ('ssigImg', 'None')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_right.png'), ('corrAns', 'm'), ('ssig', False), ('ssigImg', 'None')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_left.png'), ('corrAns', 'c'), ('ssig', False), ('ssigImg', 'None')]),
      OrderedDict([('label', 'practice'), ('arrows', 'go_right.png'), ('corrAns', 'm'), ('ssig', False), ('ssigImg', 'None')])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
    Routine trial
    Routine feedback
  LoopTerminator prac_trials
  Routine expStartScreen
  LoopInitiator experimental_trials loopType="TrialHandler"
    conditionsFile = SST_cond_V4.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('label', 'experiment'), ('arrows', 'go_left.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_left.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_right.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_right.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_left.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_left.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_right.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_right.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_left.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_left.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_right.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_right.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_left.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_left.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_right.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_right.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_left.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_left.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_right.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_right.png')]),
      OrderedDict([('label', 'experiment'), ('arrows', 'go_left.png'), ('corrAns', 'None'), ('ssig', True), ('ssigImg', 'stop_left.png')])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
    Routine trial
    Routine feedback
  LoopTerminator experimental_trials
